PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = example3
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    SoundComponent stimulation
      sound [set every repeat] = $sound_file
      volume [set every repeat] = volume_1
      stopVal [duration (s)] = 3
      startVal [time (s)] = 1
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 4.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text
      text = Stimulate vibration is being provided.
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_2
      text = Estimate the magnitude of vibration 1 to 10.
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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  Routine before_trial
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This maginitude of vibration is defined as 5 in 10 scale.

        Press 'space key', if you remenber it.
    SoundComponent sound_1
      sound = SIN150_20.wav
      volume = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'sound_file': u'SIN150_20.wav', u'scale': 1, u'volume_1': 0.1},
      {u'sound_file': u'SIN150_20.wav', u'scale': 2, u'volume_1': 0.2},
      {u'sound_file': u'SIN150_20.wav', u'scale': 3, u'volume_1': 0.3},
      {u'sound_file': u'SIN150_20.wav', u'scale': 4, u'volume_1': 0.4},
      {u'sound_file': u'SIN150_20.wav', u'scale': 5, u'volume_1': 0.5},
      {u'sound_file': u'SIN150_20.wav', u'scale': 6, u'volume_1': 0.6},
      {u'sound_file': u'SIN150_20.wav', u'scale': 7, u'volume_1': 0.7},
      {u'sound_file': u'SIN150_20.wav', u'scale': 8, u'volume_1': 0.8},
      {u'sound_file': u'SIN150_20.wav', u'scale': 9, u'volume_1': 0.9},
      {u'sound_file': u'SIN150_20.wav', u'scale': 10, u'volume_1': 1}]
    Routine before_trial
    Routine trial
  LoopTerminator trials
