PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = untitled3
  Units = use prefs
  Screen = 1
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Routines
  Routine BeforeTrial
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        This frequency is defined as 50 in 100 scale.

        Press 'space key', if you remenber it.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    SoundComponent sound_1
      sound [set every repeat] = $standerd_sound
      volume [set every repeat] = volume_1
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
  Routine trial
    KeyboardComponent key_resp_2
      forceEndRoutine = False
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','q'
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Begin Routine:
        num = 0
        num_2 = 0
        num_3 = 0
        Frag = 0
        num_total = 0
      End Routine:
        trials.addData('response', num_total)
      Each Frame:
            if '1' in theseKeys:
                if Frag == 0:
                    num = 1
                    num_total = num
                    Frag = 1
                elif Frag == 1:
                    num_2 = 1
                    num_total = 10 * num + num_2
                    Frag = 2
                elif Frag == 2:
                    num_3 = 1
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '2' in theseKeys:
                 if Frag == 0:
                    num = 2
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 2
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 2
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '3' in theseKeys:
                 if Frag == 0:
                    num = 3
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 3
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 3
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '4' in theseKeys:
                 if Frag == 0:
                    num = 4
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 4
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 4
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '5' in theseKeys:
                 if Frag == 0:
                    num = 5
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 5
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 5
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '6' in theseKeys:
                 if Frag == 0:
                    num = 6
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 6
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 6
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '7' in theseKeys:
                 if Frag == 0:
                    num = 7
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 7
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 7
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '8' in theseKeys:
                 if Frag == 0:
                    num = 8
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 8
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 8
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '9' in theseKeys:
                 if Frag == 0:
                    num = 9
                    num_total = num
                    Frag = 1
                 elif Frag == 1:
                    num_2 = 9
                    num_total = 10 * num + num_2
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 9
                    num_total = 100 * num + 10*num_2 + num_3
                    Frag = 3
            elif '0' in theseKeys:
                 if Frag == 1:
                    num_2 = 0
                    num_total = 10 * num
                    Frag = 2
                 elif Frag == 2:
                    num_3 = 0
                    num_total = 10 * num_total
                    Frag = 3
            elif 'q' in theseKeys:
                num = 0
                num_2 = 0
                num_3 = 0
                Frag = 0
                num_total = 0
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    TextComponent number
      text [set every frame] = $num_total
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Estimate the frequency of stimulate vibration 1 to 100.
        Type the number.

        [q]:You can clear the number
        When you desicide, Press Enter key.
  Routine sound_2
    SoundComponent sound_3
      sound [set every repeat] = $sound_file
      volume [set every repeat] = volume_1
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
    TextComponent text_2
      text = Stimulate vibration is being provided.
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment3.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{u'sound_file': u'SIN80_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN100_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN150_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN200_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN250_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN300_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN400_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN500_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN600_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5},
      {u'sound_file': u'SIN700_20.wav', u'standerd_sound': u'SIN400_20.wav', u'volume_1': 0.5}]
    Routine BeforeTrial
    Routine sound_2
    Routine trial
  LoopTerminator trials
