PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'participant': u'', u'vibrator_name': u'001'}
  expName = exp_0008
  Units = use prefs
  Screen = 1
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Routines
  Routine start
  Routine introduction
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent confirm_2
      forceEndRoutine = True
      allowedKeys = 'num_5'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent explanation_2
      color = black
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        上記の名前の「振動子」を利き手の人差し指に装着してください。

        [次へ Next]......5
    TextComponent text_6
      text [set every repeat] = $expInfo['vibrator_name']
      pos = [0, 5]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine explanation_3
    TextComponent text_2
      color = black
      pos = [0, -2]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        これから標準刺激を提示します。

        この標準刺激を覚えられたら次に進んでください。

        標準刺激をもう一度提示する場合は「8」を

        押してください。



        [次へ　next]....5
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'num_5'
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent sample_standard_stim
      sound = standard.wav
      volume = 0.5
      startVal [time (s)] = 1.5
  Routine explanation_4
    TextComponent display_frequency
      pos = [0, 5]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text [set every repeat]:
        $wave_type
    TextComponent explain
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        の周波数の振動を呈示します。

        ”←”と”→”で振動の大きさを変えて
        同じくらいの大きさのときに”ｃｔｒｌキー”を押してください

        以上、確認したらSpaceキーを押してください。
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent confirm
      forceEndRoutine = True
      allowedKeys = 'rctrl'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent explanation
      color = black
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 2
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      text:
        これから評価実験を開始します。
        "振動子サンプル1"を利き手の人差し指に装着したら、
        実験者向かって右側のctrlキーを押してください。
  Routine stim_trial
    CodeComponent initial
      Begin Experiment:
        volume_value = [0]
        for num in range(40):
            volume_value.append(0.025 * num)

        volume = 0
      Begin Routine:
        volume = randint(15, 25)
        initial_volume = volume
      End Routine:
        trials.addData('initial_volume', volume_value[initial_volume])
        trials.addData('desided_volume', volume_value[volume])
    SoundComponent stim_sound
      sound [set every repeat] = $exp_filename
      volume [set every repeat] = volume_value[volume]
      startVal [time (s)] = 1.5
    SoundComponent standard_sound
      sound = standard.wav
      volume = 0.4
    TextComponent text_3
      color = black
      pos = [0, -8]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 0.9
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      text:
        5→比較刺激をもう一度提示します。

        8→標準刺激をもう一度提示します。

        [Enter]→決定
    KeyboardComponent up_dB
      forceEndRoutine = False
      allowedKeys = 'num_6'
      startVal [time (s)] = 0.0
      store = nothing
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    KeyboardComponent down_dB
      forceEndRoutine = False
      allowedKeys = 'num_4'
      startVal [time (s)] = 0.0
      store = nothing
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    KeyboardComponent play_standard
      forceEndRoutine = False
      allowedKeys = 'num_7'
      startVal [time (s)] = 0.0
      store = nothing
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    KeyboardComponent deside_stim
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    KeyboardComponent confirm_stim
      forceEndRoutine = False
      allowedKeys = 'num_5'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_8
      pos = [0, 3]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        これから比較刺激を提示します。
    TextComponent text_5
      color = black
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        比較刺激の強度を調節し、

        標準刺激と同じ強度に合わせてください。
  Routine thanks
    TextComponent text
      color = black
      stopVal [duration (s)] = 5.0
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        5分ほど休憩を取ってください。

        振動子をすべて評価した方はここで終了となります。
        ご協力ありがとうございました。
  Routine display
    TextComponent text_4
      color = black
      stopVal [duration (s)] = 3
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 2
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exam1_setwave.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'exp_filename': u'SN100_00.WAV', u'wave_type': u'100Hz'},
      {u'exp_filename': u'SN150_00.WAV', u'wave_type': u'150Hz'},
      {u'exp_filename': u'SN350_00.WAV', u'wave_type': u'350Hz'},
      {u'exp_filename': u'SN400_00.WAV', u'wave_type': u'400Hz'}]
    Routine explanation_3
    Routine stim_trial
  LoopTerminator trials
  Routine thanks
