PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = example1
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      text = Thank you very much for your participation.
      stopVal [time (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine introduction
    TextComponent Intro1
      text = Now, experiment will begin.
      stopVal [time (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:

        if you can feel the vibration, press 'y'key.
        if you cannot feel the vibtation, press 'i'key.
    SoundComponent stimlus
      sound [set every repeat] = $frequency_1
      volume [set every repeat] = volume_1
      stopVal [duration (s)] = Duaration
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      correctAns = $ans_key
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'f','i'
      startVal [time (s)] = 0.0
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  Routine bef_trial
    TextComponent text
      stopVal [time (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Trial will start soon.
        During trial,
        if you can feel the vibration, press 'f'key.
        if you can not feel the vibtation, press 'i'key.
Flow
  Routine introduction
  Routine bef_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulation2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'frequency_1': u'SIN250_20.wav', u'Duaration': 1.5, u'volume_1': 0, u'ans_key': u'i'},
      {u'frequency_1': u'SIN250_20.wav', u'Duaration': 1, u'volume_1': 0, u'ans_key': u'i'},
      {u'frequency_1': u'SIN250_20.wav', u'Duaration': 1.5, u'volume_1': 0.5, u'ans_key': u'f'},
      {u'frequency_1': u'SIN250_20.wav', u'Duaration': 2, u'volume_1': 0.5, u'ans_key': u'f'},
      {u'frequency_1': u'SIN250_20.wav', u'Duaration': 2.5, u'volume_1': 0.5, u'ans_key': u'f'},
      {u'frequency_1': u'SIN80_20.wav', u'Duaration': 1.5, u'volume_1': 0, u'ans_key': u'i'},
      {u'frequency_1': u'SIN80_20.wav', u'Duaration': 1, u'volume_1': 0, u'ans_key': u'i'},
      {u'frequency_1': u'SIN80_20.wav', u'Duaration': 1.5, u'volume_1': 0.5, u'ans_key': u'f'},
      {u'frequency_1': u'SIN80_20.wav', u'Duaration': 2, u'volume_1': 0.5, u'ans_key': u'f'},
      {u'frequency_1': u'SIN80_20.wav', u'Duaration': 2.5, u'volume_1': 0.5, u'ans_key': u'f'}]
    Routine trial
  LoopTerminator trials
  Routine end
